PsychoPy2experiment version="1.90.2"
Settings
  expName = main
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = UVA
  color = $[-1,-1,-1]
  Units = deg
  Data filename = u'logs/%s_events.csv' % expInfo['participant']
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Routines
  Routine welcome
    TextComponent welcome_txt
      startVal [time (s)] = 0.0
      text = Welcome!
      letterHeight = 0.5
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    KeyboardComponent welcome_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine show_img
    CodeComponent code
      Begin Experiment:
        nr_correct = 0
      End Routine:
        if choice.getRating() == correct_resp:
            nr_correct += 1
    ImageComponent img
      startVal [time (s)] = 0.0
      pos = (0, 1.5)
      size = (10, 6.5)
      image [set every repeat] = $contrast_img
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    RatingScaleComponent choice
      startVal [time (s)] = 0.0
      categoryChoices = WM, Neg-scene, faces, conflict
      scaleDescription = Which contrast?
      singleClick = True
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = True
      size = 1.5
      pos = 0, -0.6
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  Routine end
    TextComponent end_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = """ You had %i / 40 correct! """ % $nr_correct
      letterHeight = 0.6
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Flow
  Routine welcome
  LoopInitiator img_loop loopType="TrialHandler"
    nReps = 1
    conditionsFile = stims.csv
    loopType = random
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    conditions:
      [OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0015.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0019.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0023.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0025.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0026.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0028.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0029.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0042.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0075.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0077.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/gstroop/rendered_thresh_zstat3_sub-0013.png'), ('correct_resp', 'conflict')]),
      OrderedDict([('contrast_img', 'stims/gstroop/rendered_thresh_zstat3_sub-0018.png'), ('correct_resp', 'conflict')])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
    Routine show_img
  LoopTerminator img_loop
  Routine end
